PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Study ID'], expName, expInfo['date'])
  Experiment info = {'Study ID': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = Virtual Party
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    ImageComponent wellcome_image
      image = images\welcome.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent polygon_1
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent welcome_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome!
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    CodeComponent welcome_bold
      Code Type = Auto->JS
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      Begin Experiment:
        welcome_text.bold = 'True'
        mouse = event.Mouse()
  Routine Introduction_1
    ImageComponent intro_1
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent intro_text_1
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        For this game, you will be connecting to a research social media platform used for studies of how teens/young adults make decisions about their peers.  You will be playing a game with other teens/young adults participating in research studies where you get to know each other and make decisions about who you like and don’t like to see who makes it to a virtual party. You will also see how the other players voted for you.
    KeyboardComponent intro_1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        next_intro_1.bold = 'True'
    TextComponent next_intro_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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  Routine Introduction_2
    ImageComponent intro_2
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent intro_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent intro_text_2
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The game includes 5 rounds where you will learn more and more about the other people playing the game. At the end, there will be a virtual party for the most-liked players. Players who get enough likes across the game
        will be invited to the party, but people who are less liked will not be included.  First, let’s set up your profile so that the other players can learn about you...
    TextComponent next_intro_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        next_intro_2.bold = 'True'
  Routine Participant_name
    TextComponent name_question
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your name?
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    TextboxComponent name_enter
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    PolygonComponent button_name
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit_name
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse_name
      clickable = button_name
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    VariableComponent ptp_name
      saveEndRoutine = False
      saveFrameValue = first
      saveStartStop = False
      startExpValue = name_enter.text
      startFrameValue = name_enter.text
      startRoutineValue = name_enter.text
      syncScreenRefresh = True
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    CodeComponent capitalization_name
      Code Type = Py
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      End Routine:
        if ptp_name.isalpha() and (ptp_name.islower() or (len(ptp_name) > 2 and ptp_name.isupper())):
            ptp_name = ptp_name.lower().capitalize()
        ptp_name.strip()
    CodeComponent remove_name
      Code Type = Auto->JS
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      Begin Experiment:
        expInfo['name_enter.text']= None
  Routine Participant_age
    TextComponent age_question
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How old are you? 
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    TextboxComponent age_enter
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_age
      clickable = button_age
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button_age
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit_age
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    TextComponent reminder
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please only enter a number.
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    VariableComponent ptp_age
      saveEndRoutine = False
      startExpValue = age_enter.text
      startFrameValue = age_enter.text
      startRoutineValue = age_enter.text
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  Routine Participant_hometown
    TextComponent hometown_question
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your hometown?
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    TextboxComponent hometown_enter
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_home
      clickable = button_home
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button_home
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit_home
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    VariableComponent ptp_hometown
      saveEndRoutine = False
      saveFrameValue = first
      saveStartStop = False
      startExpValue = hometown_enter.text
      startFrameValue = hometown_enter.text
      startRoutineValue = hometown_enter.text
      syncScreenRefresh = True
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    CodeComponent capitalization_2
      Code Type = Py
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      End Routine:
        if ptp_hometown.isalpha() and (ptp_hometown.islower() or (len(ptp_hometown) > 2 and ptp_hometown.isupper())):
            ptp_hometown = ptp_hometown.lower().capitalize()
  Routine Participant_interest
    TextComponent interest_question
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What are some things you are interested in?
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    TextboxComponent interest_enter
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_interest
      clickable = button_interest
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button_interest
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit_interest
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    VariableComponent ptp_interest
      saveEndRoutine = False
      saveFrameValue = first
      saveStartStop = False
      startExpValue = interest_enter.text
      startFrameValue = interest_enter.text
      startRoutineValue = interest_enter.text
      syncScreenRefresh = True
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  Routine Introduction_3
    ImageComponent image_3
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_intro_3
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent intro_text_3
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        All players are connected now. Take some time to get to know the other people playing the game with you.
    KeyboardComponent intro_key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        next_intro_3.bold = True
  Routine Player_profiles_voting_style
    CodeComponent capitalization_cop
      Code Type = Py
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      Begin Experiment:
        cop_age_st = str()

        # set a to -1
        a = -1
      Begin Routine:
        cop_response.alignText = 'left'
        cop_age_st = (str(cop_age))
        cop_prompts.alignText = 'left'

        # increment i for each loop
        a = a + 1
        print(a)
      Each Frame:
        cop_prompts.alignText = 'left'
    PolygonComponent border_2
      fillColor = white
      pos = (-0.4, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.31)
      startVal [time (s)] = 0.0
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    ImageComponent coplayer_image_2
      image [set every repeat] = $photos[a]
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent cop_prompts
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.20, 0.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Name:
        Age:
        Hometown:
        Interests:
        School:
    TextComponent cop_response
      letterHeight = 0.03
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[a] + '\n' + str(ages[a]) + '\n' + hometowns[a] + '\n' + interests[a] + '\n' + schools[a]
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    PolygonComponent like_real_button_1
      fillColor = white
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent like_real_text_1
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Like 
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    PolygonComponent dislike_real_button_1
      fillColor = white
      pos = (0.39, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent dislike_real_text_1
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Dislike 
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    MouseComponent click_real_1
      clickable = like_real_button_1, dislike_real_button_1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent vote_question_3
      letterHeight = 0.04
      pos = (0, -.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Do you like or dislike ' + names[a] + '?'
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    CodeComponent vote_trig_1
      Code Type = Both
      disabled = True
      Each Frame:
        if mouse.isPressedIn(like_real_button_1):
            win.callOnFlip(ptp_trigger_1.setData, 1)
        elif mouse.isPressedIn(dislike_real_button_1):
            win.callOnFlip(ptp_trigger_1.setData, 2)
      Each JS Frame:
        if (mouse.isPressedIn(dislike_button_3)) {
            psychoJS.window.callOnFlip(1);
        } else {
            if (mouse.isPressedIn(like_button_3)) {
                psychoJS.window.callOnFlip(2);
            }
        }
    ParallelOutComponent ptp_trigger_1
      address = 0xE010
      disabled = True
      register = EIO
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent ptp_vote_1
      Code Type = Auto->JS
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      Each Frame:
        ptp_v = ''
        if mouse.isPressedIn(like_real_button_1):
            ptp_v="Like"
        elif mouse.isPressedIn(dislike_real_button_1):
            ptp_v ="Dislike"
        voting_1.addData('Participant_vote', ptp_v)
  Routine Coplayer_profiles
    ImageComponent image_5
      image [set every repeat] = images/background_profiles.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_coplayer
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_coplayer
      fillColor = black
      pos = (-0.5, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    CodeComponent code_cop_profile
      Code Type = Both
      Begin Experiment:
        cop_age_st = str()

        curr_item = -1
      Begin JS Routine:
        text.alignHoriz = "left";
      Begin Routine:
        cop_resp_show.alignText = 'left'
        cop_prompts_show.alignText = 'left'
        cop_name_show.alignText = 'left'
        cop_name_show.bold = 'True'
        next_text_cop_profile.bold = 'True'

        curr_item += 1

        # assign current profiles
        cop_name = names[curr_item]
        cop_age = ages[curr_item]
        cop_hometown = hometowns[curr_item]
        cop_interests = interests[curr_item]
        cop_photo = photos[curr_item]
        cop_school = schools[curr_item]

        print(cop_name)
        print(cop_age)
        print(cop_hometown)
        print(cop_interests)
        print(cop_school)
      End Routine:
        print(photos)
        print(names)
        print(interests)
        print(hometowns)
    ImageComponent cop_img
      image [set every repeat] = $cop_photo
      pos = (-0.5, 0.15)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent cop_resp_show
      color = black
      letterHeight = 0.04
      pos = (0.1, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(cop_age) + '\n' + cop_hometown + '\n' + cop_interests + '\n' + cop_school
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    TextComponent cop_prompts_show
      color = black
      letterHeight = 0.04
      pos = (-0.11, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Age:
        Hometown:
        Interests:
        School:
    TextComponent cop_vote_show
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.04
      opacity = 0
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cop_vote
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    TextComponent cop_name_show
      color = black
      letterHeight = 0.04
      pos = (-0.11, -0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cop_name
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    KeyboardComponent next_cop_profile
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_text_cop_profile
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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  Routine Vote_store
    CodeComponent vote_store
      Code Type = Auto->JS
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      Begin Routine:
        #already have assigned lists
        vote_cop1 = votes[0]
        vote_cop2 = votes[1]
        vote_cop3 = votes[2]
        vote_cop4 = votes[3]
        vote_cop5 = votes[4]
        vote_cop6 = votes[5]
        vote_cop7 = votes[6]
        vote_cop8 = votes[7]
        vote_cop9 = votes[8]
        vote_cop10 = votes[9]
        vote_cop11 = votes[10]
        vote_cop12 = votes[11]

        # seperate by ','
        vote_split_cop1 = vote_cop1.split(',')
        vote_split_cop2 = vote_cop2.split(',')
        vote_split_cop3 = vote_cop3.split(',')
        vote_split_cop4 = vote_cop4.split(',')
        vote_split_cop5 = vote_cop5.split(',')
        vote_split_cop6 = vote_cop6.split(',')
        vote_split_cop7 = vote_cop7.split(',')
        vote_split_cop8 = vote_cop8.split(',')
        vote_split_cop9 = vote_cop9.split(',')
        vote_split_cop10 = vote_cop10.split(',')
        vote_split_cop11 = vote_cop11.split(',')
        vote_split_cop12 = vote_cop12.split(',')


        # create a new empty list
        vote_all = []

        #append lists to new list
        vote_all.append(vote_split_cop1)
        vote_all.append(vote_split_cop2)
        vote_all.append(vote_split_cop3)
        vote_all.append(vote_split_cop4)
        vote_all.append(vote_split_cop5)
        vote_all.append(vote_split_cop6)
        vote_all.append(vote_split_cop7)
        vote_all.append(vote_split_cop8)
        vote_all.append(vote_split_cop9)
        vote_all.append(vote_split_cop10)
        vote_all.append(vote_split_cop11)
        vote_all.append(vote_split_cop12)

        # got vote pattern lists for every coplayer
        #print(vote_split_cop1)
        #print(vote_split_cop2)
        #print(vote_split_cop3)
        #print(vote_split_cop4)
        #print(vote_split_cop5)
        #print(vote_split_cop6)
        #print(vote_split_cop7)
        #print(vote_split_cop8)
        #print(vote_split_cop9)
        #print(vote_split_cop10)
        #print(vote_split_cop11)

        # check final vote_all
        print(vote_all)
  Routine Introduction_4
    ImageComponent image_6
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_intro_4
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent intro_text_4
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Now, we want to hear from YOU about which players you like and which players you dislike, based on the information you have so far.  You will see each player’s profile again and this time click 'Like' if you like that person and 'Dislike' if you dislike that person.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent next_intro_4
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        next_intro_4.bold = True
  Routine Introduction_5
    ImageComponent image_7
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_intro_5
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        While you are voting on each player, the same person is also voting on you. After you both make your selections, you will find out how they voted for you. The feedback will look like this:
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent thumbs_up
      image = images\Like.png
      pos = (-0.3, 0.0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent thumbs_down
      image = images\dislike.png
      pos = (0.3, 0.0)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent feedback_like
      color = black
      letterHeight = 0.03
      pos = (-.29, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great news!
        This means the person liked you.
    TextComponent feedback_dislike
      color = black
      letterHeight = 0.03
      pos = (.29, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Oh no!
        This means the person disliked you.
    TextComponent next_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue. 
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    CodeComponent bold_text_thumbs
      Code Type = Auto->JS
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      Begin Routine:
        next_3.bold = 'True'
  Routine Waiting
    ImageComponent wait_1
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_wait
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent wait_text_1
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Waiting for others to connect to the social media platform...
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    ImageComponent load_1
      image = images\load-icon-png-7945.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Participant_profile
    ImageComponent image_4
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent background_profile
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border
      fillColor = black
      pos = (-0.5, 0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent subject_image
      image [set every repeat] = images\subject.jpg
      pos = (-0.5, 0.15)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent part_response
      color = black
      letterHeight = 0.04
      pos = (0.1, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $ptp_age + '\n' + ptp_hometown + '\n' + ptp_interest
        + '\n' + ptp_school
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        part_response.alignText = 'left'
        part_prompts.alignText = 'left'
        part_name.alignText = 'left'
        part_name.bold = 'True'
        next_text.bold = 'True'
    TextComponent part_prompts
      color = black
      letterHeight = 0.04
      pos = (-0.11, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Age:
        Hometown:
        Interests:
        School:
    TextComponent part_name
      color = black
      letterHeight = 0.04
      pos = (-0.11, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $ptp_name
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    KeyboardComponent next
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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  Routine Practice_1b
    TextComponent wait
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Compiling votes, your feedback
        will be presented soon...
    ImageComponent load_white1_3
      image = images\load_white.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent fixation_prac_1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Practice_1a
    ImageComponent prac_image_1
      image [set every repeat] = images/practice.png
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent like_prac_button_1
      fillColor = white
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent like_prac_text_1
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Like 
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    PolygonComponent dislike_prac_button_1
      fillColor = white
      pos = (0.39, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent dislike_prac_text_1
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Dislike 
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    TextComponent player_1
      letterHeight = 0.03
      pos = (-0.2, 0.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Player 1
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    CodeComponent bold_prac_1
      Code Type = Auto->JS
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      Begin Routine:
        player_1.bold = 'True'
    MouseComponent click_prac_1
      clickable = like_prac_button_1, dislike_prac_button_1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent vote_question_2
      letterHeight = 0.04
      pos = (0, -.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you like or dislike Player 1? 
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  Routine Practice_1d
    TextComponent wait_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Practice_2a
    ImageComponent prac_image_2
      image [set every repeat] = images/practice.png
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent like_prac_button_2
      fillColor = white
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent like_prac_text_2
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Like 
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    PolygonComponent dislike_prac_button_2
      fillColor = white
      pos = (0.39, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent dislike_prac_text_2
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Dislike 
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    TextComponent player_2
      letterHeight = 0.03
      pos = (-0.2, 0.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Player 2
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        player_2.bold = 'True'
    MouseComponent click_prac_2
      clickable = like_prac_button_2, dislike_prac_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent vote_question
      letterHeight = 0.04
      pos = (0, -.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you like or dislike Player 2? 
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  Routine Practice_2b
    TextComponent wait_3
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Compiling votes, your feedback
        will be presented soon...
    ImageComponent load_white1_4
      image = images\load_white.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent fixation_prac_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Practice_2c
    ImageComponent dislike_prac
      image [set every repeat] = images/thumb-down.png
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Practice_2d
    TextComponent wait_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Introduction_6
    ImageComponent image_13
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_intro_6
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Remember there will be 5 rounds so you can change your votes in future rounds and you may find that other players change their votes for you as well.

        First, let’s do some practice trials to make sure it’s clear how voting works.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro6
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    CodeComponent bold_intro_next
      Code Type = Auto->JS
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      Begin Routine:
        next_intro6.bold = True
  Routine Introduction_7
    ImageComponent image_12
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_9
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Now it’s time to vote for real.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro7
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    CodeComponent bold_intro_7
      Code Type = Auto->JS
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      Begin Routine:
        next_intro7.bold = True
  Routine Coplayer_profile_loader
    CodeComponent cop_info_loader
      Code Type = Auto->JS
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      Begin Experiment:
        # empty lists to hold stimuli
        names = []
        ages = []
        hometowns = []
        interests = []
        photos = []
        votes = []
        schools = []
      Begin Routine:
        # add information into lists
        names.append(cop_name)
        ages.append(cop_age)
        hometowns.append(cop_hometown)
        interests.append(cop_interests)
        photos.append(cop_photo)
        votes.append(cop_vote)
        schools.append(cop_school)
  Routine Coplayer_profile_shuffler
    CodeComponent info_shuffler
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(names)
        shuffle(ages)
        shuffle(hometowns)
        shuffle(interests)
        shuffle(photos)
        shuffle(votes)
        shuffle(schools)
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  Routine Waiting_vote
    TextComponent wait_5
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $vote_duration
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      text [set every repeat]:
        Compiling votes, your feedback
        will be presented soon...
    ImageComponent load_white1
      image = images\load_white.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $vote_duration
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    TextComponent fixation_r_1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $vote_duration
      stopVal [duration (s)] = 0.5
      text = + 
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  Routine Cop_vote
    CodeComponent code_thumb
      Code Type = Auto->JS
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      Begin Experiment:
        save_vote = ''
        play_round = ''
      Begin Routine:
        if vote_all[a][0] == '1':
            image_thumb = 'images/thumb-up.png'
            save_vote = 'Like'
            play_round = '1'
            cop_type = vote_all[a][5]
        else:
            image_thumb = 'images/thumb-down.png'
            save_vote = 'Dislike'
            play_round = '1'
            cop_type = vote_all[a][5]
        voting_1.addData('Study ID', expInfo['Study ID'])
        voting_1.addData('Coplayer_vote', save_vote)
        voting_1.addData('Round', play_round)
        voting_1.addData('Coplayer_type', cop_type)
    ImageComponent vote_image
      image [set every repeat] = $image_thumb
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    CodeComponent thumb_trigger_1
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        coplayer_trigger = parallel.ParallelPort(address='0xE010')
        FeedbackClock = core.Clock()
      Begin Routine:
        cop_v= int()
        if vote_all[a][0] == '1' and vote_all[a][5] == 'type1':
            cop_v= 15
        elif vote_all[a][0] == '0' and vote_all[a][5] == 'type1':
            cop_v= 16
        if vote_all[a][0] == '1' and vote_all[a][5] == 'type2':
            cop_v= 25
        elif vote_all[a][0] == '0' and vote_all[a][5] == 'type2':
            cop_v= 26
        if vote_all[a][0] == '1' and vote_all[a][5] == 'type3':
            cop_v= 35
        elif vote_all[a][0] == '0' and vote_all[a][5] == 'type3':
            cop_v= 36
        if vote_all[a][0] == '1' and vote_all[a][5] == 'type4':
            cop_v= 45
        elif vote_all[a][0] == '0' and vote_all[a][5] == 'type4':
            cop_v= 46


        FeedbackComponents = [coplayer_trigger]
        for thisComponent in FeedbackComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED
        FeedbackClock.reset()
        t= 0
        t = FeedbackClock.getTime()
        frameN = -0
        if coplayer_trigger.status == NOT_STARTED:
            coplayer_trigger.tStart = t
            coplayer_trigger.frameNStart = frameN
            coplayer_trigger.status = STARTED
            for frameN in range (120):
                vote_image.draw()
                win.flip()
                if frameN ==1:
                   win.callOnFlip(coplayer_trigger.setData, int(cop_v))
  Routine Practice_1c
    ImageComponent like_prac
      image = images/thumb-up.png
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Waiting_3
    ImageComponent image_15
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_12
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_12
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Let’s find out who got the MOST like votes this round...
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
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    ImageComponent image_16
      image = images\load-icon-png-7945.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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
  Routine postq_1
    TextComponent header1
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions1
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent interested_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent distressed_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent excited_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.21)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent interested
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Interested
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    TextComponent distressed
      letterHeight = 0.04
      pos = (0, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Distressed
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    TextComponent excited
      letterHeight = 0.04
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Excited
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    KeyboardComponent next_q1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code1
      Code Type = Auto->JS
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      Begin Experiment:
        header1.bold = 'True'
        instructions1.bold= 'True'
        interested.bold = 'True'
        distressed.bold = 'True'
        excited.bold = 'True'
  Routine postq_2
    TextComponent header2
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate_2
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions2
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent upset_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent strong_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent guilty_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.21)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent upset
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Upset
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    TextComponent strong
      letterHeight = 0.04
      pos = (0, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Strong
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    TextComponent guilty
      letterHeight = 0.04
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Guilty
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    KeyboardComponent next_q2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code2
      Code Type = Auto->JS
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      Begin Experiment:
        header2.bold = 'True'
        instructions2.bold= 'True'
        upset.bold = 'True'
        strong.bold = 'True'
        guilty.bold = 'True'
  Routine postq_3
    TextComponent header3
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate_3
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions3
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent scared_slider_2
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent hostile_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent enthu_slider_2
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.21)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent scared
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Scared
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    TextComponent hostile
      letterHeight = 0.04
      pos = (0, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hostile
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    TextComponent enthusiastic
      letterHeight = 0.04
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Enthusiastic
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    KeyboardComponent next_q3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code3
      Code Type = Auto->JS
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      Begin Experiment:
        header3.bold = 'True'
        instructions3.bold= 'True'
        scared.bold = 'True'
        hostile.bold = 'True'
        enthusiastic.bold = 'True'
  Routine postq_4
    TextComponent header4
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate_4
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions4
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent proud_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent irritable_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent alert_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.21)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent proud
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Proud
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    TextComponent irritable
      letterHeight = 0.04
      pos = (0, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Irritable
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    TextComponent alert
      letterHeight = 0.04
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Alert
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    KeyboardComponent next_q4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code4
      Code Type = Auto->JS
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      Begin Experiment:
        header4.bold = 'True'
        instructions4.bold= 'True'
        proud.bold = 'True'
        irritable.bold = 'True'
        alert.bold = 'True'
  Routine postq_5
    TextComponent header5
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate5
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions5
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent ashamed_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent inspired_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent nervous_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.21)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent ashamed
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ashamed
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    TextComponent inspired
      letterHeight = 0.04
      pos = (0, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Inspired
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    TextComponent nervous
      letterHeight = 0.04
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nervous
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    KeyboardComponent next_q5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code5
      Code Type = Auto->JS
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      Begin Experiment:
        header5.bold = 'True'
        instructions5.bold= 'True'
        ashamed.bold = 'True'
        inspired.bold = 'True'
        nervous.bold = 'True'
  Routine postq_6
    TextComponent header6
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate_6
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions6
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent determined_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent attentive_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent jittery_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.21)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent determined
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Determined
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    TextComponent attentive
      letterHeight = 0.04
      pos = (0, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Attentive
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    TextComponent jittery
      letterHeight = 0.04
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Jittery
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    KeyboardComponent next_q6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code6
      Code Type = Auto->JS
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      Begin Experiment:
        header6.bold = 'True'
        instructions6.bold= 'True'
        determined.bold = 'True'
        attentive.bold = 'True'
        jittery.bold = 'True'
  Routine postq_7
    TextComponent header7
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate_7
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions7
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent active_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent afraid_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent active
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Active
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    TextComponent afraid
      letterHeight = 0.04
      pos = (0, 0.02)
      startVal [time (s)] = 0.0
      text = Afraid
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    KeyboardComponent next_q7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent postq_code7
      Code Type = Auto->JS
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      Begin Experiment:
        header7.bold = 'True'
        instructions7.bold= 'True'
        active.bold = 'True'
        afraid.bold = 'True'
  Routine done
    TextComponent done_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating!
        The experiment is done.
    CodeComponent done_code
      Code Type = Auto->JS
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      Begin Experiment:
        done_text.bold = 'True'
  Routine postq_8
    TextComponent header8
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate_8
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions8
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent believe_slider_1
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent believe_slider_2
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent believe_1
      letterHeight = 0.04
      pos = (0, 0.21)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I believed I was interacting with other teens/young adults.
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    TextComponent believe_2
      letterHeight = 0.04
      pos = (0, 0.021)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I thought the other players were real people my age.
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    KeyboardComponent next_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code8
      Code Type = Auto->JS
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      Begin Experiment:
        header8.bold = 'True'
        instructions8.bold= 'True'
        believe_1.bold = 'True'
        believe_2.bold = 'True'
  Routine postq_9
    TextComponent header9
      letterHeight = 0.04
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Please answer the following questions about your experiences during the virtual party game. 
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    TextComponent indicate_9
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Indicate the way you felt playing this game:
    TextComponent instructions9
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use the mouse to pick the options that represent how you feel, then press space to submit.
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    SliderComponent bother_slider
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, 0.15)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent happy_slider_3
      borderColor = white
      color = white
      fillColor = white
      forceEndRoutine = False
      granularity = 1
      labels = "Very slightly or not at all","A little","Moderately","Quite a bit","Extremely"
      letterHeight = 0.02
      pos = (0, -0.03)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent bother
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = It bothered me when other players disliked me.
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    TextComponent happy
      letterHeight = 0.04
      pos = (0, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = It made me happy when other players liked me.
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    KeyboardComponent next_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent postq_code9
      Code Type = Auto->JS
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      Begin Experiment:
        header9.bold = 'True'
        instructions9.bold= 'True'
        bother.bold = 'True'
        happy.bold = 'True'
  Routine Most_vote_1
    ImageComponent most_pic_1
      image [set every repeat] = images\background_mostvote.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border_8
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_9
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent most_vote_1
      image [set every repeat] = $photos[m]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_most_1
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[m]
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    TextComponent next_most_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_most1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent most_votes_code
      Code Type = Auto->JS
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      Begin Experiment:
        name_most_1.bold = 'True'
        name_most_1.text.upper()
        next_most_1.bold = 'True'

        # create random index numbers for most/least player
        most_least_index = []
        for n in range(0, 11):
           most_least_index.append(n)

        shuffle(most_least_index)
        m = most_least_index[0]
        l = most_least_index[1]
  Routine Waiting_4
    ImageComponent image_17
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_13
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_13
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Let’s find out who got the LEAST like votes this round...
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    KeyboardComponent key_resp_14
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
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    ImageComponent image_18
      image = images\load-icon-png-7945.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Least_vote_1
    ImageComponent image_20
      image [set every repeat] = images\sad.png
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border4_4
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_6
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent least_vote_1
      image [set every repeat] = $photos[l]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_least_1
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[l]
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    TextComponent next_least_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_least1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent least_code_1
      Code Type = Auto->JS
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      Begin Experiment:
        name_least_1.bold = 'True'
        next_least_1.bold = 'True'
      End Routine:
        # create random index numbers for most/least player
        m = most_least_index[2]
        l = most_least_index[3]
  Routine Introduction_9
    ImageComponent image_22
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_15
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_15
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        It’s time to learn more about the players in this game.
        Everyone will be asked a poll question and see each other’s responses.
    TextComponent next_intro7_6
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Experiment:
        next_intro7_6.bold = 'True'
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  Routine Poll_q1
    TextComponent poll_question_1
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = What is your favorite movie?
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    TextboxComponent poll_enter_1
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    PolygonComponent button5
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit5
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse5
      clickable = button5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    VariableComponent ptp_poll_1
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = poll_enter_1.text
      startFrameValue = poll_enter_1.text
      startRoutineValue = poll_enter_1.text
      syncScreenRefresh = True
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  Routine Waiting_5
    ImageComponent image_19
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_16
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_11
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Waiting for others to answer the poll question...
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    ImageComponent image_23
      image = images\load-icon-png-7945.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Introduction_10
    ImageComponent image_24
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_17
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        All players have answered the poll question now.

        Let's see the responses!
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro3_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space to continue.
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        next_intro3_2.bold = 'True'
  Routine Introduction_11
    ImageComponent image_25
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_18
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_17
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Time to move on to the next round. We are getting closer to the virtual party!

        Let’s see if you will be invited.
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro3_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space to continue.
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        next_intro3_3.bold = 'True'
  Routine Player_profiles_voting_style_2
    CodeComponent capitalization_cop_2
      Code Type = Py
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      Begin Experiment:
        cop_age_st = str()

        # set b to -1
        b = -1
      Begin Routine:
        cop_response_2.alignText = 'left'
        cop_prompts_2.alignText = 'left'


        # increment b for each loop
        b = b + 1
    PolygonComponent border_4
      fillColor = white
      pos = (-0.4, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.31)
      startVal [time (s)] = 0.0
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    ImageComponent coplayer_image
      image [set every repeat] = $photos[b]
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent cop_prompts_2
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.2, 0.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Name:
        Age:
        Hometown:
        Interests:
        School:
    TextComponent cop_response_2
      letterHeight = 0.03
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[b] + '\n' + str(ages[b]) + '\n' + hometowns[b] + '\n' + interests[b] + '\n' + schools[b]
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    PolygonComponent like_real_button_2
      fillColor = white
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent like_real_text_2
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text = Like 
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    PolygonComponent dislike_real_button_2
      fillColor = white
      pos = (0.39, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent dislike_real_text_2
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Dislike 
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    MouseComponent click_real_2
      clickable = like_real_button_2, dislike_real_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent vote_question_4
      letterHeight = 0.04
      pos = (0, -.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Do you like or dislike ' + names[b] + '?'
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    CodeComponent vote_trig_2
      Code Type = Both
      disabled = True
      Each Frame:
        if mouse.isPressedIn(like_real_button_2):
            win.callOnFlip(ptp_trigger_2.setData, 1)
        elif mouse.isPressedIn(dislike_real_button_2):
            win.callOnFlip(ptp_trigger_2.setData, 2)
      Each JS Frame:
        if (mouse.isPressedIn(dislike_button_3)) {
            psychoJS.window.callOnFlip(1);
        } else {
            if (mouse.isPressedIn(like_button_3)) {
                psychoJS.window.callOnFlip(2);
            }
        }
    ParallelOutComponent ptp_trigger_2
      address = 0xE010
      disabled = True
      register = EIO
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent ptp_vote_2
      Code Type = Auto->JS
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      Each Frame:
        ptp_v = ''
        if mouse.isPressedIn(like_real_button_2):
            ptp_v="Like"
        elif mouse.isPressedIn(dislike_real_button_2):
            ptp_v ="Dislike"
        voting_2.addData('Participant_vote', ptp_v)
  Routine Cop_vote_2
    ImageComponent vote_image_second
      image [set every repeat] = $image_thumb
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_thumb_2
      Code Type = Auto->JS
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      Begin Routine:
        if vote_all[b][1] == '1':
            image_thumb = 'images/thumb-up.png'
            save_vote = 'Like'
            play_round = '2'
            cop_type = vote_all[b][5]
        else:
            image_thumb = 'images/thumb-down.png'
            save_vote = 'Dislike'
            play_round = '2'
            cop_type = vote_all[b][5]
        voting_2.addData('Study ID', expInfo['Study ID'])
        voting_2.addData('Coplayer_vote', save_vote)
        voting_2.addData('Round', play_round)
        voting_2.addData('Coplayer_type', cop_type)
    CodeComponent thumb_trigger
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        coplayer_trigger_second = parallel.ParallelPort(address='0xE010')
        FeedbackClock_second = core.Clock()
      Begin Routine:
        cop_v_second = int()
        if vote_all[b][1] == '1' and vote_all[b][5] == 'type1':
            cop_v= 15
        elif vote_all[b][1] == '0' and vote_all[b][5] == 'type1':
            cop_v= 16
        if vote_all[b][1] == '1' and vote_all[b][5] == 'type2':
            cop_v= 25
        elif vote_all[b][1] == '0' and vote_all[b][5] == 'type2':
            cop_v= 26
        if vote_all[b][1] == '1' and vote_all[b][5] == 'type3':
            cop_v= 35
        elif vote_all[b][1] == '0' and vote_all[b][5] == 'type3':
            cop_v= 36
        if vote_all[b][1] == '1' and vote_all[b][5] == 'type4':
            cop_v= 45
        elif vote_all[b][1] == '0' and vote_all[b][5] == 'type4':
            cop_v= 46

        FeedbackComponents = [coplayer_trigger_second]
        for thisComponent in FeedbackComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED
        FeedbackClock_second.reset()
        t_second = 0
        t_second = FeedbackClock_second.getTime()
        frameN = -0
        if coplayer_trigger_second.status == NOT_STARTED:
            coplayer_trigger_second.tStart = t
            coplayer_trigger_second.frameNStart = frameN
            coplayer_trigger_second.status = STARTED
            for frameN in range (120):
                vote_image_second.draw()
                win.flip()
                if frameN ==1:
                   win.callOnFlip(coplayer_trigger_second.setData, int(cop_v))
  Routine Waiting_vote_3
    TextComponent wait_7
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine Poll_loader
    CodeComponent code_poll_loader
      Code Type = Auto->JS
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      Begin Experiment:
        poll_1 = []
        poll_2 = []
        poll_3 = []
        poll_4 = []
      Begin Routine:
        poll_1.append(cop_poll1)
        poll_2.append(cop_poll2)
        poll_3.append(cop_poll3)
        poll_4.append(cop_poll4)

        shuffle(poll_1)
        shuffle(poll_2)
        shuffle(poll_3)
        shuffle(poll_4)
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  Routine Introduction_12
    ImageComponent image_26
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_19
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's learn more about the players.
        Everyone will answer the next poll question and see each other’s responses.
    TextComponent next_intro7_7
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Experiment:
        next_intro7_7.bold = 'True'
  Routine Poll_q2
    TextComponent poll_question_2
      letterHeight = 0.08
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = If money didn't matter, what would be your dream job?
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    TextboxComponent poll_enter_2
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    PolygonComponent button5_2
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit5_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse5_2
      clickable = button5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    VariableComponent ptp_poll_2
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = poll_enter_2.text
      startFrameValue = poll_enter_2.text
      startRoutineValue = poll_enter_2.text
      syncScreenRefresh = True
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
  Routine Player_profiles_voting_style_3
    PolygonComponent border_10
      fillColor = white
      pos = (-0.4, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.31)
      startVal [time (s)] = 0.0
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    CodeComponent capitalization_cop_3
      Code Type = Py
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      Begin Experiment:
        cop_age_st = str()

        # set c to -1
        c = -1
      Begin Routine:
        cop_response_3.alignText = 'left'
        cop_prompts_3.alignText = 'left'


        # increment i for each loop
        c = c + 1
    ImageComponent coplayer_image_3
      image [set every repeat] = $photos[c]
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent cop_prompts_3
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.2, 0.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Name:
        Age:
        Hometown:
        Interests:
        School:
    TextComponent cop_response_3
      letterHeight = 0.03
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[c] + '\n' + str(ages[c]) + '\n' + hometowns[c] + '\n' + interests[c] + '\n' + schools[c]
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    PolygonComponent like_real_button_3
      fillColor = white
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent like_real_text_3
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Like 
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    PolygonComponent dislike_real_button_3
      fillColor = white
      pos = (0.39, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent dislike_real_text_3
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Dislike 
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    MouseComponent click_real_3
      clickable = like_real_button_3, dislike_real_button_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent vote_question_5
      letterHeight = 0.04
      pos = (0, -.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Do you like or dislike ' + names[c] + '?'
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    CodeComponent vote_trig
      Code Type = Both
      disabled = True
      Each Frame:
        if mouse.isPressedIn(like_real_button_3):
            win.callOnFlip(ptp_trigger_3.setData, 1)
        elif mouse.isPressedIn(dislike_real_button_3):
            win.callOnFlip(ptp_trigger_3.setData, 2)
      Each JS Frame:
        if (mouse.isPressedIn(dislike_button_3)) {
            psychoJS.window.callOnFlip(1);
        } else {
            if (mouse.isPressedIn(like_button_3)) {
                psychoJS.window.callOnFlip(2);
            }
        }
    ParallelOutComponent ptp_trigger_3
      address = 0xE010
      disabled = True
      register = EIO
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent ptp_vote_3
      Code Type = Auto->JS
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      Each Frame:
        ptp_v = ''
        if mouse.isPressedIn(like_real_button_3):
            ptp_v="Like"
        elif mouse.isPressedIn(dislike_real_button_3):
            ptp_v ="Dislike"
        voting_3.addData('Participant_vote', ptp_v)
  Routine Cop_vote_3
    CodeComponent code_thumb_3
      Code Type = Auto->JS
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      Begin Routine:
        if vote_all[c][2] == '1':
            image_thumb = 'images/thumb-up.png'
            save_vote = 'Like'
            play_round = '3'
            cop_type = vote_all[c][5]
        else:
            image_thumb = 'images/thumb-down.png'
            save_vote = 'Dislike'
            play_round = '3'
            cop_type = vote_all[c][5]
        voting_3.addData('Study ID', expInfo['Study ID'])
        voting_3.addData('Coplayer_vote', save_vote)
        voting_3.addData('Round', play_round)
        voting_3.addData('Coplayer_type', cop_type)
    ImageComponent vote_image_third
      image [set every repeat] = $image_thumb
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent thumb_trigger_3
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        coplayer_trigger_third = parallel.ParallelPort(address='0xE010')
        FeedbackClock_third = core.Clock()
      Begin Routine:
        cop_v_third = int()
        if vote_all[c][2] == '1' and vote_all[c][5] == 'type1':
            cop_v= 15
        elif vote_all[c][2] == '0' and vote_all[c][5] == 'type1':
            cop_v= 16
        if vote_all[c][2] == '1' and vote_all[c][5] == 'type2':
            cop_v= 25
        elif vote_all[c][2] == '0' and vote_all[c][5] == 'type2':
            cop_v= 26
        if vote_all[c][2] == '1' and vote_all[c][5] == 'type3':
            cop_v= 35
        elif vote_all[c][2] == '0' and vote_all[c][5] == 'type3':
            cop_v= 36
        if vote_all[c][2] == '1' and vote_all[c][5] == 'type4':
            cop_v= 45
        elif vote_all[c][2] == '0' and vote_all[c][5] == 'type4':
            cop_v= 46

        FeedbackComponents = [coplayer_trigger_third]
        for thisComponent in FeedbackComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED
        FeedbackClock_third.reset()
        t_third = 0
        t_third = FeedbackClock_third.getTime()
        frameN = -0
        if coplayer_trigger_third.status == NOT_STARTED:
            coplayer_trigger_third.tStart = t
            coplayer_trigger_third.frameNStart = frameN
            coplayer_trigger_third.status = STARTED
            for frameN in range (120):
                vote_image_third.draw()
                win.flip()
                if frameN ==1:
                   win.callOnFlip(coplayer_trigger_third.setData, int(cop_v))
  Routine Poll_q3
    TextComponent poll_question_3
      letterHeight = 0.08
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = If you had a whole day to do whatever you wanted, what would you do?
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    TextboxComponent poll_enter_3
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    PolygonComponent button5_3
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit5_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse5_3
      clickable = button5_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    VariableComponent ptp_poll_3
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = poll_enter_3.text
      startFrameValue = poll_enter_3.text
      startRoutineValue = poll_enter_3.text
      syncScreenRefresh = True
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
  Routine Player_profiles_voting_style_4
    PolygonComponent border_11
      fillColor = white
      pos = (-0.4, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.31)
      startVal [time (s)] = 0.0
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    CodeComponent capitalization_cop_4
      Code Type = Py
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      Begin Experiment:
        cop_age_st = str()

        # set d to -1
        d = -1
      Begin Routine:
        cop_response_4.alignText = 'left'
        cop_prompts_4.alignText = 'left'


        # increment i for each loop
        d = d + 1
    ImageComponent coplayer_image_4
      image [set every repeat] = $photos[d]
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent cop_prompts_4
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.2, 0.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Name:
        Age:
        Hometown:
        Interests:
        School:
    TextComponent cop_response_4
      letterHeight = 0.03
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[d] + '\n' + str(ages[d]) + '\n' + hometowns[d] + '\n' + interests[d] + '\n' + schools[d]
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    PolygonComponent like_real_button_4
      fillColor = white
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent like_real_text_4
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Like 
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    PolygonComponent dislike_real_button_4
      fillColor = white
      pos = (0.39, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent dislike_real_text_4
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Dislike 
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    MouseComponent click_real_4
      clickable = like_real_button_4, dislike_real_button_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent vote_question_6
      letterHeight = 0.04
      pos = (0, -.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Do you like or dislike ' + names[d] + '?'
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    CodeComponent vote_trig_4
      Code Type = Both
      disabled = True
      Each Frame:
        if mouse.isPressedIn(like_real_button_4):
            win.callOnFlip(ptp_trigger_4.setData, 1)
        elif mouse.isPressedIn(dislike_real_button_4):
            win.callOnFlip(ptp_trigger_4.setData, 2)
      Each JS Frame:
        if (mouse.isPressedIn(dislike_button_3)) {
            psychoJS.window.callOnFlip(1);
        } else {
            if (mouse.isPressedIn(like_button_3)) {
                psychoJS.window.callOnFlip(2);
            }
        }
    ParallelOutComponent ptp_trigger_4
      address = 0xE010
      disabled = True
      register = EIO
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent ptp_vote_4
      Code Type = Auto->JS
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      Each Frame:
        ptp_v = ''
        if mouse.isPressedIn(like_real_button_4):
            ptp_v="Like"
        elif mouse.isPressedIn(dislike_real_button_4):
            ptp_v ="Dislike"
        voting_4.addData('Participant_vote', ptp_v)
  Routine Cop_vote_4
    CodeComponent code_thumb_4
      Code Type = Auto->JS
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      Begin Routine:
        if vote_all[d][3] == '1':
            image_thumb = 'images/thumb-up.png'
            save_vote = 'Like'
            play_round = '4'
            cop_type = vote_all[d][5]
        else:
            image_thumb = 'images/thumb-down.png'
            save_vote = 'Dislike'
            play_round = '4'
            cop_type = vote_all[d][5]
        voting_4.addData('Study ID', expInfo['Study ID'])
        voting_4.addData('Coplayer_vote', save_vote)
        voting_4.addData('Round', play_round)
        voting_4.addData('Coplayer_type', cop_type)
    ImageComponent vote_image_4
      image [set every repeat] = $image_thumb
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent thumb_trigger_4
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        coplayer_trigger_fourth = parallel.ParallelPort(address='0xE010')
        FeedbackClock_fourth = core.Clock()
      Begin Routine:
        cop_v_fourth = int()
        if vote_all[d][3] == '1' and vote_all[d][5] == 'type1':
            cop_v= 15
        elif vote_all[d][3] == '0' and vote_all[d][5] == 'type1':
            cop_v= 16
        if vote_all[d][3] == '1' and vote_all[d][5] == 'type2':
            cop_v= 25
        elif vote_all[d][3] == '0' and vote_all[d][5] == 'type2':
            cop_v= 26
        if vote_all[d][3] == '1' and vote_all[d][5] == 'type3':
            cop_v= 35
        elif vote_all[d][3] == '0' and vote_all[d][5] == 'type3':
            cop_v= 36
        if vote_all[d][3] == '1' and vote_all[d][5] == 'type4':
            cop_v= 45
        elif vote_all[d][3] == '0' and vote_all[d][5] == 'type4':
            cop_v= 46

        FeedbackComponents = [coplayer_trigger_fourth]
        for thisComponent in FeedbackComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED
        FeedbackClock_fourth.reset()
        t_fourth = 0
        t_fourth = FeedbackClock_fourth.getTime()
        frameN = -0
        if coplayer_trigger_fourth.status == NOT_STARTED:
            coplayer_trigger_fourth.tStart = t
            coplayer_trigger_fourth.frameNStart = frameN
            coplayer_trigger_fourth.status = STARTED
            for frameN in range (120):
                vote_image_4.draw()
                win.flip()
                if frameN ==1:
                   win.callOnFlip(coplayer_trigger_fourth.setData, int(cop_v))
  Routine Poll_q4
    TextComponent poll_question_4
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = What is your least favorite class?
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    TextboxComponent poll_enter_4
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    PolygonComponent button5_4
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit5_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse5_4
      clickable = button5_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    VariableComponent ptp_poll_4
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = poll_enter_4.text
      startFrameValue = poll_enter_4.text
      startRoutineValue = poll_enter_4.text
      syncScreenRefresh = True
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
  Routine Player_profiles_voting_style_5
    PolygonComponent border_12
      fillColor = white
      pos = (-0.4, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.31)
      startVal [time (s)] = 0.0
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    CodeComponent capitalization_cop_5
      Code Type = Py
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      Begin Experiment:
        cop_age_st = str()

        # set e to -1
        e = -1
      Begin Routine:
        cop_response_5.alignText = 'left'
        cop_prompts_5.alignText = 'left'


        # increment e for each loop
        e = e + 1
    ImageComponent coplayer_image_5
      image [set every repeat] = $photos[e]
      pos = (-0.4, 0.2)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent cop_prompts_5
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.2, 0.25)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Name:
        Age:
        Hometown:
        Interests:
        School:
    TextComponent cop_response_5
      letterHeight = 0.03
      pos = (0.45, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[e] + '\n' + str(ages[e]) + '\n' + hometowns[e] + '\n' + interests[e] + '\n' + schools[e]
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    PolygonComponent like_real_button_5
      fillColor = white
      pos = (-0.4, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent like_real_text_5
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Like 
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    PolygonComponent dislike_real_button_5
      fillColor = white
      pos = (0.39, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent dislike_real_text_5
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Dislike 
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    MouseComponent click_real_5
      clickable = like_real_button_5, dislike_real_button_5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent vote_question_7
      letterHeight = 0.04
      pos = (0, -.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Do you like or dislike ' + names[e] + '?'
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    CodeComponent vote_trig_5
      Code Type = Both
      disabled = True
      Each Frame:
        if mouse.isPressedIn(like_real_button_5):
            win.callOnFlip(ptp_trigger_5.setData, 1)
        elif mouse.isPressedIn(dislike_real_button_5):
            win.callOnFlip(ptp_trigger_5.setData, 2)
      Each JS Frame:
        if (mouse.isPressedIn(dislike_button_3)) {
            psychoJS.window.callOnFlip(1);
        } else {
            if (mouse.isPressedIn(like_button_3)) {
                psychoJS.window.callOnFlip(2);
            }
        }
    ParallelOutComponent ptp_trigger_5
      address = 0xE010
      disabled = True
      register = EIO
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent ptp_vote_5
      Code Type = Auto->JS
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      Each Frame:
        ptp_v = ''
        if mouse.isPressedIn(like_real_button_5):
            ptp_v="Like"
        elif mouse.isPressedIn(dislike_real_button_5):
            ptp_v ="Dislike"
        voting_5.addData('Participant_vote', ptp_v)
  Routine Cop_vote_5
    CodeComponent code_thumb_5
      Code Type = Auto->JS
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      Begin Routine:
        if vote_all[e][4] == '1':
            image_thumb = 'images/thumb-up.png'
            save_vote = 'Like'
            play_round = '5'
            cop_type = vote_all[e][5]
        else:
            image_thumb = 'images/thumb-down.png'
            save_vote = 'Dislike'
            play_round = '5'
            cop_type = vote_all[e][5]
        voting_5.addData('Study ID', expInfo['Study ID'])
        voting_5.addData('Coplayer_vote', save_vote)
        voting_5.addData('Round', play_round)
        voting_5.addData('Coplayer_type', cop_type)
    ImageComponent vote_image_5
      image [set every repeat] = $image_thumb
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent thumb_trigger_5
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        coplayer_trigger_fifth = parallel.ParallelPort(address='0xE010')
        FeedbackClock_fifth = core.Clock()
      Begin Routine:
        cop_v_fifth = int()
        if vote_all[e][4] == '1' and vote_all[e][5] == 'type1':
            cop_v= 15
        elif vote_all[e][4] == '0' and vote_all[e][5] == 'type1':
            cop_v= 16
        if vote_all[e][4] == '1' and vote_all[e][5] == 'type2':
            cop_v= 25
        elif vote_all[e][4] == '0' and vote_all[e][5] == 'type2':
            cop_v= 26
        if vote_all[e][4] == '1' and vote_all[e][5] == 'type3':
            cop_v= 35
        elif vote_all[e][4] == '0' and vote_all[e][5] == 'type3':
            cop_v= 36
        if vote_all[e][4] == '1' and vote_all[e][5] == 'type4':
            cop_v= 45
        elif vote_all[e][4] == '0' and vote_all[e][5] == 'type4':
            cop_v= 46

        FeedbackComponents = [coplayer_trigger_fifth]
        for thisComponent in FeedbackComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED
        FeedbackClock_fifth.reset()
        t_fifth = 0
        t_fifth = FeedbackClock_fifth.getTime()
        frameN = -0
        if coplayer_trigger_fifth.status == NOT_STARTED:
            coplayer_trigger_fifth.tStart = t
            coplayer_trigger_fifth.frameNStart = frameN
            coplayer_trigger_fifth.status = STARTED
            for frameN in range (120):
                vote_image_5.draw()
                win.flip()
                if frameN ==1:
                   win.callOnFlip(coplayer_trigger_fifth.setData, int(cop_v))
  Routine Least_vote_2
    ImageComponent image_30
      image [set every repeat] = images\sad.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border4_5
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_13
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent least_vote_2
      image [set every repeat] = $photos[l]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_least_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[l]
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    TextComponent next_least_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_least2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent least_votes_2
      Code Type = Auto->JS
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      Begin Experiment:
        name_least_2.bold = 'True'
        next_least_2.bold = 'True'
      End Routine:
        # create random index numbers for most/least player
        m = most_least_index[4]
        l = most_least_index[5]
  Routine Most_vote_2
    ImageComponent most_pic
      image [set every repeat] = images\background_mostvote.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border_14
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_15
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent most_vote_2
      image [set every repeat] = $photos[m]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_most_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[m]
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    TextComponent next_most_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_most2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent most_votes_2
      Code Type = Auto->JS
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      Begin Experiment:
        name_most_2.bold = 'True'
        name_most_2.text.upper()
        next_most_2.bold = 'True'
  Routine Most_vote_3
    ImageComponent most_pic_2
      image [set every repeat] = images\background_mostvote.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border_16
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_17
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent most_vote_3
      image [set every repeat] = $photos[m]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_most_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[m]
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    TextComponent next_most_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_most3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent most_votes_3
      Code Type = Auto->JS
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      Begin Experiment:
        name_most_3.bold = 'True'
        name_most_3.text.upper()
        next_most_3.bold = 'True'
  Routine Least_vote_3
    ImageComponent image_31
      image [set every repeat] = images\sad.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border4_6
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_18
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent least_vote_3
      image [set every repeat] = $photos[l]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_least_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[l]
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    TextComponent next_least_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_least3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent least_votes_3
      Code Type = Auto->JS
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      Begin Experiment:
        name_least_3.bold = 'True'
        next_least_3.bold = 'True'
      End Routine:
        # create random index numbers for most/least player
        m = most_least_index[6]
        l = most_least_index[7]
  Routine Least_vote_4
    ImageComponent image_32
      image [set every repeat] = images\sad.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border4_7
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_19
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent least_vote_4
      image [set every repeat] = $photos[l]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_least_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[l]
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    TextComponent next_least_4
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_least4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent least_votes_4
      Code Type = Auto->JS
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      Begin Experiment:
        name_least_4.bold = 'True'
        next_least_4.bold = 'True'
      End Routine:
        # create random index numbers for most/least player
        m = most_least_index[8]
        l = most_least_index[9]
  Routine Most_vote_4
    ImageComponent most_pic_3
      image [set every repeat] = images\background_mostvote.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border_20
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_21
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent most_vote_4
      image [set every repeat] = $photos[m]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_most_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[m]
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    TextComponent next_most_4
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_most4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent most_votes_4
      Code Type = Auto->JS
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      Begin Experiment:
        name_most_4.bold = 'True'
        name_most_4.text.upper()
        next_most_4.bold = 'True'
  Routine Most_vote_5
    ImageComponent most_pic_4
      image [set every repeat] = images\background_mostvote.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border_22
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_23
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent most_vote_5
      image [set every repeat] = $photos[m]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_most_5
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[m]
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    TextComponent next_most_5
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_most5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent most_votes_5
      Code Type = Auto->JS
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      Begin Experiment:
        name_most_5.bold = 'True'
        name_most_5.text.upper()
        next_most_5.bold = 'True'
  Routine Least_vote_5
    ImageComponent image_33
      image [set every repeat] = images\sad.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border4_8
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_24
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.22, 0.32)
      startVal [time (s)] = 0.0
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    ImageComponent least_vote_5
      image [set every repeat] = $photos[l]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent name_least_5
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[l]
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    TextComponent next_least_5
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_least5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent least_votes_5
      Code Type = Auto->JS
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      Begin Experiment:
        name_least_5.bold = 'True'
        next_least_5.bold = 'True'
  Routine Waiting_6
    ImageComponent image_34
      image = images\round5.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_23
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_19
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Ok, the votes are in and it’s time to find out who is invited to the party… 
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
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    ImageComponent image_35
      image = images\load-icon-png-7945.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Result
    ImageComponent party_pic
      image [set every repeat] = images/background_party.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent border_25
      fillColor = white
      opacity = 0.9
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent border_26
      fillColor = black
      lineColor = black
      pos = (-0.5, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.19, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent winner_1
      image [set every repeat] = $photos[most_least_index[0]]
      pos = (-0.5, 0.1)
      saveStartStop = False
      size = (0.18, 0.27)
      startVal [time (s)] = 0.0
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    TextComponent winner_n1
      color = black
      letterHeight = 0.04
      pos = (-0.5, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[most_least_index[0]]
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    TextComponent winner_n2
      color = black
      letterHeight = 0.04
      pos = (-0.3, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[most_least_index[2]]
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    TextComponent winner_n3
      color = black
      letterHeight = 0.04
      pos = (-0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[most_least_index[4]]
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    TextComponent winner_n4
      color = black
      letterHeight = 0.04
      pos = (0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[most_least_index[6]]
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    TextComponent winner_n5
      color = black
      letterHeight = 0.04
      pos = (0.3, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[most_least_index[8]]
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    TextComponent winner_n6
      color = black
      letterHeight = 0.04
      pos = (0.5, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_name
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    TextComponent next_result1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    KeyboardComponent next_result
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Experiment:
        next_result1.bold = 'True'
        winner_n1.bold = 'True'
        winner_n2.bold = 'True'
        winner_n3.bold = 'True'
        winner_n4.bold = 'True'
        winner_n5.bold = 'True'
        winner_n6.bold = 'True'
    PolygonComponent border_27
      fillColor = black
      lineColor = black
      pos = (-0.3, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.19, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent winner_2
      image [set every repeat] = $photos[most_least_index[4]]
      pos = (-0.3, 0.1)
      saveStartStop = False
      size = (0.18, 0.27)
      startVal [time (s)] = 0.0
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    PolygonComponent border_28
      fillColor = black
      lineColor = black
      pos = (-0.1, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.19, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent winner_3
      image [set every repeat] = $photos[most_least_index[2]]
      pos = (-0.1, 0.1)
      saveStartStop = False
      size = (0.18, 0.27)
      startVal [time (s)] = 0.0
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    PolygonComponent border_29
      fillColor = black
      lineColor = black
      pos = (0.1, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.19, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent winner_4
      image [set every repeat] = $photos[most_least_index[6]]
      pos = (0.1, 0.1)
      saveStartStop = False
      size = (0.18, 0.27)
      startVal [time (s)] = 0.0
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    PolygonComponent border_30
      fillColor = black
      lineColor = black
      pos = (0.3, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.19, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent winner_5
      image [set every repeat] = $photos[most_least_index[8]]
      pos = (0.3, 0.1)
      saveStartStop = False
      size = (0.18, 0.27)
      startVal [time (s)] = 0.0
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    PolygonComponent border_31
      fillColor = black
      lineColor = black
      pos = (0.5, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.19, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent winner_6
      image [set every repeat] = images/subject.jpg
      pos = (0.5, 0.1)
      saveStartStop = False
      size = (0.18, 0.27)
      startVal [time (s)] = 0.0
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    TextComponent text_24
      color = black
      letterHeight = 0.04
      pos = (0, -0.19)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONGRATULATIONS!  You are invited!
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Experiment:
        text_24.bold = 'True'
    ParallelOutComponent result_trigger
      address = 0xE010
      disabled = True
      register = EIO
      startData = 50
      startVal [frame N] = 1
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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
  Routine Chat
    TextComponent chat_q
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Lastly you get a chance to chat with each other! You will see what your friends are saying and you can add your own comments HERE:
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    TextboxComponent chat_enter
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    PolygonComponent button5_5
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit5_5
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse5_5
      clickable = button5_5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    VariableComponent ptp_chat_enter
      saveStartStop = False
      startExpValue = chat_enter.text
      startFrameValue = chat_enter.text
      startRoutineValue = chat_enter.text
      syncScreenRefresh = True
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  Routine comment_final
    ImageComponent image_party2
      image = images\background_party.jpg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent border_33
      fillColor = black
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        text_26.alignText = 'Left'
        text_26.bold = 'True'
    TextComponent text_26
      flip [set every frame] = None
      letterHeight = 50
      ori [set every frame] = 0
      pos [set every frame] = [50, 5-frameN]
      saveStartStop = False
      stopVal [time (s)] = 30
      units = pix
      wrapWidth = 1000
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      text [set every frame]:
        $names[most_least_index[0]] + ': ' + 'Yay'+'\n' + names[most_least_index[2]] + ': ' + 'We did it, team!'+'\n' + names[most_least_index[4]] + ': ' + 'I want those nachos'+'\n' + names[most_least_index[6]] + ': ' + 'Is this for real???'+'\n' + names[most_least_index[8]] + ': ' + 'Yay'+'\n' + ptp_name + ': ' + ptp_chat_enter
    ImageComponent see_chats
      image = images\chats.png
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine round_1
    ImageComponent image_36
      image = images\round1.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_24
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_27
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Time to move on to the next round. We are getting closer to the virtual party! Let’s see if you will be invited.
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro3_4
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space to continue.
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    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Routine:
        next_intro3_4.bold = 'True'
  Routine round_2
    ImageComponent image_37
      image = images\round2.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_25
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_28
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Time to move on to the next round. We are getting closer to the virtual party! Let’s see if you will be invited.
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro3_5
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space to continue.
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        next_intro3_5.bold = 'True'
  Routine round_3
    ImageComponent image_38
      image = images\round3.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_26
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Time to move on to the next round. We are getting closer to the virtual party! Let’s see if you will be invited.
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    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_intro3_6
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space to continue.
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    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        next_intro3_6.bold = 'True'
  Routine round_4
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  Routine Participant_school
    TextComponent school_question
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What school do you go to?
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    TextboxComponent school_enter
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_school
      clickable = button_school
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent button_school
      fillColor = white
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent submit_school
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    VariableComponent ptp_school
      saveEndRoutine = False
      saveFrameValue = first
      startExpValue = school_enter.text
      startFrameValue = school_enter.text
      startRoutineValue = school_enter.text
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  Routine Waiting_vote_2
    TextComponent wait_6
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $vote_duration
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      text [set every repeat]:
        Compiling votes, your feedback
        will be presented soon...
    ImageComponent load_white1_2
      image = images\load_white.png
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $vote_duration
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    TextComponent fixation_r_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = $vote_duration
      stopVal [duration (s)] = 0.5
      text = + 
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  Routine poll_resp_1_1
    ImageComponent image_14
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_11
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent poll_next_1_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    TextComponent poll_1_1_names
      color = black
      letterHeight = 0.04
      pos = (-0.15, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_name +':' + '\n'+ names[0]+':' +'\n'+ names[1]+':'+'\n'+ names[2]+':'+'\n'+ names[3]+':' +'\n'+ names[4]+':' +'\n'+ names[5]+':'+'\n'+ names[6]+':'
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    TextComponent poll_1_1_responses
      color = black
      letterHeight = 0.04
      pos = (0.05, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_poll_1 +'\n' + poll_1[0] +'\n'+ poll_1[1] +'\n'+ poll_1[2] +'\n'+ poll_1[3] +'\n'+ poll_1[4] +'\n'+ poll_1[5] +'\n'+ poll_1[6]
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    CodeComponent poll_code_1
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        poll_next_1_1.bold = 'True'
        poll_1_1_names.alignText = 'Left'
        poll_1_1_names.bold = 'True'
        poll_1_1_responses.alignText = 'Left'
  Routine poll_resp_1_2
    ImageComponent image_42
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_30
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent poll_next_1_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    TextComponent poll_1_2_names
      color = black
      letterHeight = 0.04
      pos = (-0.15, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[7]+':' +'\n'+ names[8]+':'+'\n'+ names[9]+':'+'\n'+ names[10]+':' +'\n'+ names[11]+':'
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    TextComponent poll_1_2_responses
      color = black
      letterHeight = 0.04
      pos = (0.05, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $poll_1[7] +'\n'+ poll_1[8] +'\n'+ poll_1[9] +'\n'+ poll_1[10] +'\n'+ poll_1[11] 
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    CodeComponent poll_code_5
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        poll_next_1_2.bold = 'True'
        poll_1_2_names.alignText = 'Left'
        poll_1_2_names.bold = 'True'
        poll_1_2_responses.alignText = 'Left'
  Routine poll_resp_2_1
    ImageComponent image_43
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent poll_next_2_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    TextComponent poll_2_1_names
      color = black
      letterHeight = 0.04
      pos = (-0.15, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_name +':' + '\n'+ names[0]+':' +'\n'+ names[1]+':'+'\n'+ names[2]+':'+'\n'+ names[3]+':' +'\n'+ names[4]+':' +'\n'+ names[5]+':'+'\n'+ names[6]+':'
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    TextComponent poll_2_1_responses
      color = black
      letterHeight = 0.04
      pos = (0.05, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_poll_2 +'\n' + poll_2[0] +'\n'+ poll_2[1] +'\n'+ poll_2[2] +'\n'+ poll_2[3] +'\n'+ poll_2[4] +'\n'+ poll_2[5] +'\n'+ poll_2[6]
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    CodeComponent poll_code
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        poll_next_2_1.bold = 'True'
        poll_2_1_names.alignText = 'Left'
        poll_2_1_names.bold = 'True'
        poll_2_1_responses.alignText = 'Left'
  Routine poll_resp_2_2
    ImageComponent image_44
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_31
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent poll_next_2_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    TextComponent poll_2_2_names
      color = black
      letterHeight = 0.04
      pos = (-0.15, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[7]+':' +'\n'+ names[8]+':'+'\n'+ names[9]+':'+'\n'+ names[10]+':' +'\n'+ names[11]+':'
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    TextComponent poll_2_2_responses
      color = black
      letterHeight = 0.04
      pos = (0.05, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $poll_2[7] +'\n'+ poll_2[8] +'\n'+ poll_2[9] +'\n'+ poll_2[10] +'\n'+ poll_2[11] 
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    CodeComponent poll_code_6
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        poll_next_2_2.bold = 'True'
        poll_2_2_names.alignText = 'Left'
        poll_2_2_names.bold = 'True'
        poll_2_2_responses.alignText = 'Left'
  Routine poll_resp_3_1
    ImageComponent image_46
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_5
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent poll_next_3_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    TextComponent poll_3_1_names
      color = black
      letterHeight = 0.04
      pos = (-0.15, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_name +':' + '\n'+ names[0]+':' +'\n'+ names[1]+':'+'\n'+ names[2]+':'+'\n'+ names[3]+':' +'\n'+ names[4]+':' +'\n'+ names[5]+':'+'\n'+ names[6]+':'
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    TextComponent poll_3_1_responses
      color = black
      letterHeight = 0.04
      pos = (0.05, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_poll_3 +'\n' + poll_3[0] +'\n'+ poll_3[1] +'\n'+ poll_3[2] +'\n'+ poll_3[3] +'\n'+ poll_3[4] +'\n'+ poll_3[5] +'\n'+ poll_3[6]
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    CodeComponent poll_code_8
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        poll_next_3_1.bold = 'True'
        poll_3_1_names.alignText = 'Left'
        poll_3_1_names.bold = 'True'
        poll_3_1_responses.alignText = 'Left'
  Routine pol_resp_3_2
    ImageComponent image_45
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_32
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent poll_next_3_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    TextComponent poll_3_2_names
      color = black
      letterHeight = 0.04
      pos = (-0.15, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $names[7]+':' +'\n'+ names[8]+':'+'\n'+ names[9]+':'+'\n'+ names[10]+':' +'\n'+ names[11]+':'
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    TextComponent poll_3_2_responses
      color = black
      letterHeight = 0.04
      pos = (0.05, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $poll_3[7] +'\n'+ poll_3[8] +'\n'+ poll_3[9] +'\n'+ poll_3[10] +'\n'+ poll_3[11] 
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    CodeComponent poll_code_7
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        poll_next_3_2.bold = 'True'
        poll_3_2_names.alignText = 'Left'
        poll_3_2_names.bold = 'True'
        poll_3_2_responses.alignText = 'Left'
  Routine poll_resp_4_1
    ImageComponent image_47
      image = images\background_gen.jpeg
      saveStartStop = False
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_6
      fillColor = white
      opacity = 0.8
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent poll_next_4_1
      color = black
      letterHeight = 0.04
      pos = (0, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to continue.
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    TextComponent poll_4_1_names
      color = black
      letterHeight = 0.04
      pos = (-0.15, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_name +':' + '\n'+ names[0]+':' +'\n'+ names[1]+':'+'\n'+ names[2]+':'+'\n'+ names[3]+':' +'\n'+ names[4]+':' +'\n'+ names[5]+':'+'\n'+ names[6]+':'
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    TextComponent poll_4_1_responses
      color = black
      letterHeight = 0.04
      pos = (0.05, 0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ptp_poll_4 +'\n' + poll_4[0] +'\n'+ poll_4[1] +'\n'+ poll_4[2] +'\n'+ poll_4[3] +'\n'+ poll_4[4] +'\n'+ poll_4[5] +'\n'+ poll_4[6]
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    CodeComponent poll_code_9
      Code Type = Auto->JS
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      Begin Experiment:
        trialList=data.importConditions('Trials.xlsx')
      Begin Routine:
        poll_next_4_1.bold = 'True'
        poll_4_1_names.alignText = 'Left'
        poll_4_1_names.bold = 'True'
        poll_4_1_responses.alignText = 'Left'
  Routine pol_resp_4_2
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Flow
  Routine Welcome
  Routine Introduction_1
  Routine Introduction_2
  Routine Participant_name
  Routine Participant_age
  Routine Participant_hometown
  Routine Participant_interest
  Routine Participant_school
  Routine Participant_profile
  Routine Waiting
  Routine Introduction_3
  LoopInitiator cop_info_loader_loop loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'cop_photo': 'images/vanderbilt-undergrad-eeg-f-1.jpg', 'cop_name': 'Alex', 'cop_age': 21, 'cop_hometown': 'Pasadena, CA', 'cop_interests': 'fishing, reading, spending time with friends', 'cop_school': 'Kennesaw State University', 'cop_vote': '0,0,0,0,1,mean1', 'vote_duration': 2, 'cop_poll1': 'Avatar', 'cop_poll2': 'Broadway singer', 'cop_poll3': 'Sleep', 'cop_poll4': 'Gen Chem', 'cop_poll5': 'Barack Obama'},
      {'cop_photo': 'images/vanderbilt-undergrad-eeg-f-2.jpg', 'cop_name': 'Kennedy', 'cop_age': 18, 'cop_hometown': 'Chicago, IL', 'cop_interests': 'rock climbing, politics, nature', 'cop_school': 'University of Phoenix', 'cop_vote': '0,1,0,0,0, mean1', 'vote_duration': 2, 'cop_poll1': 'The Bat Man', 'cop_poll2': 'Chef', 'cop_poll3': 'Go for a run and then hang out with friends', 'cop_poll4': 'Bio', 'cop_poll5': 'Cleopatra'},
      {'cop_photo': 'images/vanderbilt-undergrad-eeg-f-3.jpg', 'cop_name': 'Jordan', 'cop_age': 19, 'cop_hometown': 'St. Louis', 'cop_interests': 'design and music', 'cop_school': 'Texas Tech University', 'cop_vote': '0,0,1,0,0,mean1', 'vote_duration': 2, 'cop_poll1': 'Lady Bird', 'cop_poll2': 'Traveler', 'cop_poll3': "Go to the airport and get on a random flight to somewhere I've never been before", 'cop_poll4': 'Macro economics', 'cop_poll5': 'shawn mendes'},
      {'cop_photo': 'images/vanderbilt-undergrad-eeg-f-4.jpg', 'cop_name': 'Taylor', 'cop_age': 19, 'cop_hometown': 'Notre Dame, IN', 'cop_interests': 'playing guitar and spending time with friends and family', 'cop_school': 'Tulane University', 'cop_vote': '1,0,1,0,0,mean2', 'vote_duration': 2, 'cop_poll1': 'Inception', 'cop_poll2': 'food blogger', 'cop_poll3': 'Go visit my parents', 'cop_poll4': 'Physics II', 'cop_poll5': 'John Steinbeck'}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
    Routine Coplayer_profile_loader
  LoopTerminator cop_info_loader_loop
  Routine Coplayer_profile_shuffler
  LoopInitiator coplayers_show loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Coplayer_profiles
  LoopTerminator coplayers_show
  Routine Vote_store
  Routine Introduction_4
  Routine Introduction_5
  Routine Introduction_6
  Routine Practice_1a
  Routine Practice_1b
  Routine Practice_1c
  Routine Practice_1d
  Routine Practice_2a
  Routine Practice_2b
  Routine Practice_2c
  Routine Practice_2d
  Routine Introduction_7
  LoopInitiator voting_1 loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Player_profiles_voting_style
    Routine Waiting_vote
    Routine Cop_vote
    Routine Waiting_vote_3
  LoopTerminator voting_1
  Routine Waiting_3
  Routine Most_vote_1
  Routine Waiting_4
  Routine Least_vote_1
  Routine round_1
  LoopInitiator poll_load loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Poll_loader
  LoopTerminator poll_load
  Routine Introduction_9
  Routine Poll_q1
  Routine Waiting_5
  Routine Introduction_10
  Routine poll_resp_1_1
  Routine poll_resp_1_2
  Routine Introduction_11
  LoopInitiator voting_2 loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Player_profiles_voting_style_2
    Routine Waiting_vote_2
    Routine Cop_vote_2
    Routine Waiting_vote_3
  LoopTerminator voting_2
  Routine Waiting_3
  Routine Most_vote_2
  Routine Waiting_4
  Routine Least_vote_2
  Routine round_2
  Routine Introduction_12
  Routine Poll_q2
  Routine Waiting_5
  Routine Introduction_10
  Routine poll_resp_2_1
  Routine poll_resp_2_2
  Routine Introduction_11
  LoopInitiator voting_3 loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Player_profiles_voting_style_3
    Routine Waiting_vote_2
    Routine Cop_vote_3
    Routine Waiting_vote_3
  LoopTerminator voting_3
  Routine Waiting_3
  Routine Most_vote_3
  Routine Waiting_4
  Routine Least_vote_3
  Routine round_3
  Routine Introduction_12
  Routine Poll_q3
  Routine Waiting_5
  Routine Introduction_10
  Routine poll_resp_3_1
  Routine pol_resp_3_2
  Routine Introduction_11
  LoopInitiator voting_4 loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Player_profiles_voting_style_4
    Routine Waiting_vote_2
    Routine Cop_vote_4
    Routine Waiting_vote_3
  LoopTerminator voting_4
  Routine Waiting_3
  Routine Most_vote_4
  Routine Waiting_4
  Routine Least_vote_4
  Routine round_4
  Routine Introduction_12
  Routine Poll_q4
  Routine Waiting_5
  Routine Introduction_10
  Routine poll_resp_4_1
  Routine pol_resp_4_2
  Routine Introduction_11
  LoopInitiator voting_5 loopType="TrialHandler"
    conditionsFile = Trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cop_photo': 'images/vanderbilt-undergrad-eeg-f-1.jpg', 'cop_name': 'Alex', 'cop_age': 21, 'cop_hometown': 'Pasadena, CA', 'cop_interests': 'fishing, reading, spending time with friends', 'cop_vote': '0,0,0,0,1', 'vote_duration': 2, 'cop_poll1': 'Avatar', 'cop_poll2': 'Broadway singer', 'cop_poll3': 'Sleep', 'cop_poll4': 'Gen Chem', 'cop_poll5': 'Barack Obama'},
      {'cop_photo': 'images/vanderbilt-undergrad-eeg-f-2.jpg', 'cop_name': 'Kennedy', 'cop_age': 18, 'cop_hometown': 'Chicago, IL', 'cop_interests': 'rock climbing, politics, nature', 'cop_vote': '0,1,0,0,0', 'vote_duration': 2, 'cop_poll1': 'The Bat Man', 'cop_poll2': 'Chef', 'cop_poll3': 'Go for a run and then hang out with friends', 'cop_poll4': 'Bio', 'cop_poll5': 'Cleopatra'},
      {'cop_photo': 'images/vanderbilt-undergrad-eeg-f-3.jpg', 'cop_name': 'Jordan', 'cop_age': 19, 'cop_hometown': 'St. Louis', 'cop_interests': 'design and music', 'cop_vote': '0,0,1,0,0', 'vote_duration': 2, 'cop_poll1': 'Lady Bird', 'cop_poll2': 'Traveler', 'cop_poll3': "Go to the airport and get on a random flight to somewhere I've never been before", 'cop_poll4': 'Macro economics', 'cop_poll5': 'shawn mendes'},
      {'cop_photo': 'images/vanderbilt-undergrad-eeg-f-4.jpg', 'cop_name': 'Taylor', 'cop_age': 19, 'cop_hometown': 'Notre Dame, IN', 'cop_interests': 'playing guitar and spending time with friends and family', 'cop_vote': '1,0,1,0,0', 'vote_duration': 2, 'cop_poll1': 'Inception', 'cop_poll2': 'food blogger', 'cop_poll3': 'Go visit my parents', 'cop_poll4': 'Physics II', 'cop_poll5': 'John Steinbeck'}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
    Routine Player_profiles_voting_style_5
    Routine Waiting_vote_2
    Routine Cop_vote_5
    Routine Waiting_vote_3
  LoopTerminator voting_5
  Routine Waiting_3
  Routine Most_vote_5
  Routine Waiting_4
  Routine Least_vote_5
  Routine Waiting_6
  Routine Result
  Routine Chat
  Routine comment_final
  Routine postq_1
  Routine postq_2
  Routine postq_3
  Routine postq_4
  Routine postq_5
  Routine postq_6
  Routine postq_7
  Routine postq_8
  Routine postq_9
  Routine done
